
/gate/physics/addPhysicsList emstandard_opt1

/gate/physics/addProcess RadioactiveDecay

/gate/physics/addProcess PositronAnnihilation e+

#/gate/physics/removeProcess Compton gamma

#/gate/physics/removeProcess RayleighScattering gamma

# High cut by default
#/gate/physics/Gamma/SetCutInRegion      world 1 km
#/gate/physics/Electron/SetCutInRegion   world 1 km
#/gate/physics/Positron/SetCutInRegion   world 1 km

# Low cut in the crystal
 /gate/physics/Gamma/SetCutInRegion      crystalUnit 1 mm
 /gate/physics/Electron/SetCutInRegion   crystalUnit 1 mm
 /gate/physics/Positron/SetCutInRegion   crystalUnit 1 mm

